// Load Fiji dependencies
import ij.IJ; 		// calls imagej
//import ij.Prefs; 	// calls imagej settings
import java.lang.Runtime;
import java.io.File;
import java.io.FilenameFilter;

runtime = Runtime.getRuntime();
System.out.println(runtime.availableProcessors() + " cores available for multi-threading");

//Prefs.setThreads(7); 	// defines the number of threads allowed
//print("Threads: "+Prefs.getThreads()); // prints thread setting in output

System.out.println( "Start to load Parameters:" );
// Select xml
image_file_directory = System.getProperty( "image_file_directory" );
merged_xml = System.getProperty( "merged_xml" );
if ( ! merged_xml.endsWith(".xml") )
    merged_xml = merged.xml + ".xml";

System.out.println( "-------------------------------------------------------" );
System.out.println( "Load xml file: " );
System.out.println( "selected = " + image_file_directory + merged_xml + ".xml");

// Load general Parameters
System.out.println( "-------------------------------------------------------" );
System.out.println( "General parameters: " );

int parallel_timepoints = Integer.parseInt(System.getProperty( "parallel_timepoints" ));
System.out.println( "timepoint_processed = " + parallel_timepoints );

process_timepoint = System.getProperty( "process_timepoint" );
System.out.println( "process_timepoints = " + process_timepoint );

//process_channel = System.getProperty( "process_channel" );
//System.out.println( "process_channel = " + process_channel );

//process_illumination = System.getProperty( "process_illumination" );
//System.out.println( "process_illumination = " + process_illumination );

//process_angle = System.getProperty( "process_angle" );
//System.out.println( "process_angle = " + process_angle );

// Load bounding box
//
//System.out.println( "-------------------------------------------------------" );
//System.out.println("Bounding Box");
//bounding_box = System.getProperty( "bounding_box", "Define manually");
//bounding_box_string = "";
//if (bounding_box.equals( "Define manually" ))
//{
//	bounding_box_string = "bounding_box=[" + bounding_box + "] ";
//	System.out.println( "Use a manually defined Bounding Box" );
//} 
//else if (bounding_box.equals( "Use pre-defined Bounding Box" )) 
//{
//	bounding_box_string = "bounding_box=[" + bounding_box + "] ";
//	System.out.println( "Use a pre-defined Bounding Box" );
//} 
//else 
//{
//	System.out.println( "Bounding Box setting bad" );
//}
//
//allow_to_modify = System.getProperty( "allow_to_modify", "No");
//String allow_to_modify_string = "";
//if (allow_to_modify.equalsIgnoreCase( "No" ))
//{
//	System.out.println( "Don't allow to modify Bounding Box" );
//} 
//else if (allow_to_modify.equalsIgnoreCase( "Yes" )) 
//{
//	allow_to_modify_string = "allow_to_modify ";
//	System.out.println( "Allow to modify Bounding Box" );
//} 
//else 
//{
//	System.out.println( "Allow to modify Bounding Box setting bad" );
//}
//
//bounding_box_title = System.getProperty( "bounding_box_title" );
//minimal_x_deco = System.getProperty( "minimal_x_deco" );
//minimal_y_deco = System.getProperty( "minimal_y_deco" );
//minimal_z_deco = System.getProperty( "minimal_z_deco" );
//maximal_x_deco = System.getProperty( "maximal_x_deco" );
//maximal_y_deco = System.getProperty( "maximal_y_deco" );
//maximal_z_deco = System.getProperty( "maximal_z_deco" );

//System.out.println( "bounding_box_title = " + bounding_box_title );
//System.out.println( "minimal_x_deco = " + minimal_x_deco );
//System.out.println( "minimal_y_deco = " + minimal_y_deco );
//System.out.println( "minimal_z_deco = " + minimal_z_deco );
//System.out.println( "maximal_x_deco = " + maximal_x_deco );
//System.out.println( "maximal_y_deco = " + maximal_y_deco );
//System.out.println( "maximal_z_deco = " + maximal_z_deco );

// Load deconvolution Parameters

System.out.println( "-------------------------------------------------------" );
System.out.println( "Deconvolution settings: " );

//imglib2_container = System.getProperty( "imglib2_container_deco" );
//System.out.println( "imglib2_container = " + imglib2_container );

//imglib2_container_ffts = System.getProperty( "imglib2_container_deco" );
//System.out.println( "imglib2_container_ffts = " + imglib2_container_ffts );

downsampling = System.getProperty( "downsample_deco" );
System.out.println( "downsampling = " + downsampling );

input = System.getProperty( "input" );
System.out.println( "input = " + input );

weight = System.getProperty( "weight" );
System.out.println( "weight = " + weight );

initialize_with = System.getProperty( "initialize_with" );
System.out.println( "initialize_with = " + initialize_with );

type_of_iteration = System.getProperty( "type_of_iteration" );
System.out.println( "type_of_iteration = " + type_of_iteration );

fast_sequential_iterations = System.getProperty( "fast_sequential_iterations", "No");
String fast_sequential_iterations_string = "";
if (fast_sequential_iterations.equalsIgnoreCase( "No" ))
{
	System.out.println( "Don't do fast sequential iterations" );
} 
else if (fast_sequential_iterations.equalsIgnoreCase( "Yes" )) 
{
	fast_sequential_iterations_string = "fast_sequential_iterations ";
	System.out.println( "Perform fast sequential iterations" );
} 
else 
{
	System.out.println( "Fast sequential iterations setting bad" );
}

osem_acceleration = System.getProperty( "osem_acceleration" );
System.out.println( "osem_acceleration = " + osem_acceleration );

Tikhonov_parameter = System.getProperty( "Tikhonov_parameter" );
System.out.println( "Tikhonov_parameter = " + Tikhonov_parameter );

compute = System.getProperty( "compute" );
System.out.println( "compute = " + compute );

iterations = System.getProperty( "iterations" );
System.out.println( "number_of_iterations = " + iterations );

deco_output_file_directory = System.getProperty( "deco_output_file_directory" );
System.out.println( "deco_output_file_directory = " + deco_output_file_directory );

// PSF Parameters

//System.out.println( "-------------------------------------------------------" );
//System.out.println( "PSF Parameters: " );
//
//// Define the way how PSF parameters will be determined
//psf_estimation = System.getProperty( "psf_estimation", "Extract from beads" );
//psf_estimation_string = "";
//if (psf_estimation.equals( "Extract from beads" ))
//{
//	psf_estimation_string = "psf_estimation=[" + psf_estimation + "] ";
//	System.out.println( "PSF will be extracted from beads" );
//} 
//else if (psf_estimation.equals( "Provide file with PSF" )) 
//{
//	psf_estimation_string = "psf_estimation=[" + psf_estimation + "] ";
//	System.out.println( "PSF will be extracted from the provided files" );
//} 
//else 
//{
//	System.out.println( "PSF estimation setting bad" );
//}
//
//// Extracting PSF parameters from beads - channel settings
//// 1. parse channels
//channels = System.getProperty( "channels" );
//System.out.println( "Channels: " + channels );
//// 2. parse detections_to_extract_psf_for_channel
//detections_to_extract_psf_for_channel = System.getProperty( "detections_to_extract_psf_for_channel" );
//System.out.println( "PSF: " + detections_to_extract_psf_for_channel );
//// 3. split channels and detections_to_extract_psf_for_channel
//String delims = "[,]";
//String[] channel_token = channels.split(delims);
//String[] psf_token = detections_to_extract_psf_for_channel.split(delims);
//// 4. assemble channel_string
//StringBuilder channel_string = new StringBuilder();
//for (int channel=0; channel < channel_token.length; channel++ )
//{
//	String channel_part = "detections_to_extract_psf_for_channel_" + channel_token[channel] + "=" + psf_token[channel] + " ";
//	channel_string.append( channel_part );
//	channel_string.append(" ");
//}
//System.out.println( channel_string );
//
//// Extracting PSF parameters from beads - PSF size settings
//psf_size_x = System.getProperty( "psf_size_x" );
//psf_size_y = System.getProperty( "psf_size_y" );
//psf_size_z = System.getProperty( "psf_size_z" );
//System.out.println( "psf_size_x = " + psf_size_x );
//System.out.println( "psf_size_y = " + psf_size_y );
//System.out.println( "psf_size_z = " + psf_size_z );
//
//// Extracting PSF parameters from provided files - list of files
//
//// Extracting PSF parameters from provided files - use_same_psf_for_all_channels flag
//use_same_psf_for_all_channels = System.getProperty( "use_same_psf_for_all_channels", "No");
//String use_same_psf_for_all_channels_string = "";
//if (use_same_psf_for_all_channels.equalsIgnoreCase( "No" ))
//{
//	System.out.println( "Don't use same PSF for all channels" );
//} 
//else if (use_same_psf_for_all_channels.equalsIgnoreCase( "Yes" )) 
//{
//	use_same_psf_for_all_channels_string = "use_same_psf_for_all_channels ";
//	System.out.println( "Use same PSF for all channels" );
//} 
//else 
//{
//	System.out.println( "Use same PSF for all channels setting bad" );
//}
//
//// Extracting PSF parameters from provided files - transform_psfs flag
//transform_psfs = System.getProperty( "transform_psfs", "No");
//String transform_psfs_string = "";
//if (transform_psfs.equalsIgnoreCase( "No" ))
//{
//	System.out.println( "Don't transform PSFs" );
//} 
//else if (transform_psfs.equalsIgnoreCase( "Yes" )) 
//{
//	transform_psfs_string = "transform_psfs ";
//	System.out.println( "Transform PSFs" );
//} 
//else 
//{
//	System.out.println( "Transform PSFs setting bad" );
//}

// GPU/CPU setting
System.out.println( "-------------------------------------------------------" );
System.out.println( "GPU/CPU setting: " );

compute_on = System.getProperty( "compute_on" );
directory_cuda = System.getProperty( "directory_cuda" );
cudafourierconvolution = System.getProperty( "cudafourierconvolution" );

System.out.println( "compute_on = " + compute_on );
System.out.println( "directory_cuda = " + directory_cuda  );
System.out.println( "cudafourierconvolution = " + cudafourierconvolution );

String compute_string = "";
String cuda_settings = "";

if (compute_on.equalsIgnoreCase( "GPU (Nvidia CUDA via JNA)" ) )
{
	System.out.println( "GPU deconvoultion selected" );
	compute_string = "compute_on=[GPU (Nvidia CUDA via JNA)] ";
	cuda_settings = "cuda_directory=" + directory_cuda + " " +
			"select_native_library_for_cudafourierconvolution=" + cudafourierconvolution + " " +
			"gpu_1 ";
        System.out.println( "cuda_settings=" + cuda_settings );
}

else if (compute_on.equalsIgnoreCase( "CPU (Java)" ) )
{
	System.out.println( "CPU deconvoultion selected" );
	compute_string = "compute_on=[" + compute_on + "] ";
	cuda_settings  = "";
}
			
else 
{
	System.out.println( "Deconvolution GPU/CPU selection bad" );
}
					
System.out.println( "compute_string=" + compute_string );

// Saving settings

System.out.println( "-------------------------------------------------------" );
System.out.println( "Saving settings: " );

fused_image = System.getProperty( "fused_image" );
System.out.println( "fused_image=" + fused_image );

produce = System.getProperty( "produce" );
System.out.println( "produce=" + produce );

//output_xml = System.getProperty( "output_xml" );
//System.out.println( "output_xml" );


// Assign existing PSFs (temporary stuff)

angles = System.getProperty( "angles" );
channels = System.getProperty( "channels" );

// Parses string angles
String delims = "[,]";
String[] angle_token = angles.split(delims);
String[] channel_token = channels.split(delims);

int viewCount = 0; // Assume views are contiguous and set for angles and channels only

for ( int channel = 0; channel < channel_token.length; channel++) {
	String channel_string = "processing_channel=[channel " + channel_token[channel] + "] ";
	for ( int angle = 0; angle < angle_token.length; angle++) {
		String angle_string = "processing_angle=[angle " + angle_token[angle] + "] ";
				
		assigning_string = "select=" + image_file_directory + merged_xml + " " +
		"unique_id=" + unique_id + " " +
		"process_angle=[Single angle (Select from List)] " +
		angle_string +
		"process_channel=[Single channel (Select from List)] " +
		channel_string +
		"process_illumination=[All illuminations] " +
		"process_tile=[All tiles] " +
		"process_timepoint=[" + process_timepoint + "] " +
		"processing_timepoint=[Timepoint " + parallel_timepoints + "] " +
		"type=[Assign new PSF to all selected views] " +
		"browse=" + image_file_directory + "psf/psf_t" + parallel_timepoints + "_v" + viewCount + ".tif " +
		"specify=" + image_file_directory + "psf/psf_t" + parallel_timepoints + "_v" + viewCount + ".tif";

		System.out.println( "=======================================================" );
		System.out.println( "Assigning PSFs" );
		System.out.println(assigning_string);
		try {
			IJ.run("Assign PSFs", assigning_string);
		}
		catch ( e ) { 

			print( "[deconvolution::assigning PSFs] caught exception: "+e );
			//important to fail the process if exception occurs
			runtime.exit(1);
			
		}
		
		viewCount++;
	}
}

// Execute Fiji Plugin
System.out.println( "=======================================================" );
System.out.println( "Starting Deconvolution" );
System.out.println("Deconvolve select=" + image_file_directory + merged_xml + " " + 
	"process_angle=[All angles] " +
	"process_channel=[All channels] " + 
	"process_illumination=[All illuminations] " +
	"process_tile=[All tiles] " +
	"process_timepoint=[" + process_timepoint + "] " +
	"processing_timepoint=[Timepoint " + parallel_timepoints + "] " +
//  bounding_box_string +
//	allow_to_modify_string +
//	"bounding_box_title=[" + bounding_box_title + "] " +
//	"minimal_x=" + minimal_x_deco + " " +
//	"minimal_y=" + minimal_y_deco + " " +
//	"minimal_z=" + minimal_z_deco + " " +
//	"maximal_x=" + maximal_x_deco + " " +
//	"maximal_y=" + maximal_y_deco + " " +
//	"maximal_z=" + maximal_z_deco + " " +
//  "psf_estimation=[" + psf_estimation + "] " +
//	"psf_display=[Do not show PSFs] " +
//	channel_string +
//	"psf_size_x=" + psf_size_x + " " +
//	"psf_size_y=" + psf_size_y + " " +
//	"psf_size_z=" + psf_size_z + " " +
//	use_same_psf_for_all_channels_string +
//	transform_psfs_string +
//  "imglib2_container=[" + imglib2_container + "] " +
//	"imglib2_container_ffts=[" + imglib2_container_ffts + "] " +
    "downsampling=" + downsampling + " " +
    "input=" + input + " " +
	"weight=" + weight + " " +
    "initialize_with=[" + initialize_with + "] " +
	"type_of_iteration=[" + type_of_iteration + "] " +
	fast_sequential_iterations_string +
	"osem_acceleration=" + osem_acceleration + " " +
	"number_of_iterations=" + iterations + " " +
	"use_tikhonov_regularization " +
	"tikhonov_parameter=" + Tikhonov_parameter + " " +
	"compute=[" + compute + "] " +
	compute_string +
	"produce=[" + produce + "] " +
	"fused_image=[" + fused_image + "] " +
	"output_file_directory=" + image_file_directory + " " +
	cuda_settings);

try {
IJ.run("Deconvolve", 
	"select=" + image_file_directory + merged_xml + " " + 
	"process_angle=[All angles] " +
	"process_channel=[All channels] " + 
	"process_illumination=[All illuminations] " +
	"process_tile=[All tiles] " +
	"process_timepoint=[" + process_timepoint + "] " +
	"processing_timepoint=[Timepoint " + parallel_timepoints + "] " +
//  bounding_box_string +
//	allow_to_modify_string +
//	"bounding_box_title=[" + bounding_box_title + "] " +
//	"minimal_x=" + minimal_x_deco + " " +
//	"minimal_y=" + minimal_y_deco + " " +
//	"minimal_z=" + minimal_z_deco + " " +
//	"maximal_x=" + maximal_x_deco + " " +
//	"maximal_y=" + maximal_y_deco + " " +
//	"maximal_z=" + maximal_z_deco + " " +
//	"psf_estimation=[" + psf_estimation + "] " +
//	"psf_display=[Do not show PSFs] " +
//  channel_string +
//	"psf_size_x=" + psf_size_x + " " +
//	"psf_size_y=" + psf_size_y + " " +
//	"psf_size_z=" + psf_size_z + " " +
//	use_same_psf_for_all_channels_string +
//	transform_psfs_string +
//	"imglib2_container=[" + imglib2_container_deco + "] " +
//  "imglib2_container_ffts=[" + imglib2_container_deco + "] " +
    "downsampling=" + downsampling + " " +
    "input=" + input + " " +
	"weight=" + weight + " " +
    "initialize_with=[" + initialize_with + "] " +
	"type_of_iteration=[" + type_of_iteration + "] " +
	fast_sequential_iterations_string +
	"osem_acceleration=" + osem_acceleration + " " +
	"number_of_iterations=" + iterations + " " +
	"use_tikhonov_regularization " +
	"tikhonov_parameter=" + Tikhonov_parameter + " " +
	"compute=[" + compute + "] " +
	compute_string +
	"produce=[" + produce + "] " +
	"fused_image=[" + fused_image + "] " +
	"output_file_directory=" + image_file_directory + " " +
	cuda_settings);
}
catch ( e ) {

    print( "[deconvolution-GPU] caught exception: "+e );
    //important to fail the process if exception occurs
    runtime.exit(1);
}

/* shutdown */
runtime.exit(0);
